begin model

begin parameters
    #diffusion constants
    D_VOL 1e-6 # cm^2/s
    MCELL_DIFFUSION_CONSTANT_3D_P D_VOL
    MCELL_DIFFUSION_CONSTANT_3D_Y D_VOL
    MCELL_DIFFUSION_CONSTANT_3D_Ribo D_VOL
    #MCELL_DIFFUSION_CONSTANT_3D_mRNA_l D_VOL
    #MCELL_DIFFUSION_CONSTANT_3D_mRNA_s D_VOL
    MCELL_DIFFUSION_CONSTANT_3D_nucl D_VOL
    
    NA_um3 6.022e8 # Avogadro's number mutiplied by 1e-15 since we are using volume units of microns(^-3)

    # Initial number molecules
    P_i 0
    %%%%insert Y
    %%%%insert ribo
    %%%%insert numbers

    #rates
    #need adaption, currently have way too little aminoresource
    #talk with melani, but i believe as long as the ratios are reserved it doesnt matter how stupid the numbers are (can also make the volume a lot smaller)
    deg_r  0.005           #unimolecular (1/s)
    init_r  10000 #1e+15/NA_um3   #bimolecular  (1/M * 1/s or 1/# "NA * V ")
    elong_r 5000 #1e+18/NA_um3   #bimolecular when considering aminoacid
    term_r  5000 #1e+15/NA_um3   #bimolecular when considering aminoacid
    
         

    # Units: volumes in um3
    #VolPM 0.0307
    VolCP 0.1#50588 
 
end parameters

begin compartments
    #PM 2 VolPM
    CP 3 VolCP #3Dimensions and 1 microcubic in volume, volume compartment , only need one for now, 
end compartments

begin molecule types
    %%%%insert protein def
    Y
    %%%%insert nucl def
    Ribo(N)
end molecule types

begin species
    # we start with no protein to begin with
    %%%%insert P release
    #aminoacid aka protein resource
    @CP:Y Y_i
    #ribosomes
    @CP:Ribo(N) Ribo_i
    #mRNA
    %%%%insert mRNA def
    
end species


begin reaction rules
    #protein degradation
    %%%%insert degration equation
    
    #ribosome binds to mRNA
    nucl(R, t~0, i~1) + Ribo(N) -> nucl(R!1, t~0, i~1).Ribo(N!1) init_r
    
    #ribosome advances on mRNA
    nucl(R!2, r!1).Ribo(N!2).nucl(R, l!1) + Y -> nucl(R,r!1).nucl(R!3,l!1).Ribo(N!3) elong_r
    
    
    #ribsome is at termination point
    %%%%insert reaction equation
    #complexes dont move and are treated as surfaces
    
end reaction rules
    
    

begin observables
    Molecules r Ribo(N)
    Molecules y Y
    
    %%%%insert observ
end observables


end model
